PsychoPy2experiment version="2020.1.2"
Settings
  Completed URL = https://app.prolific.co/submissions/complete?cc=4F32FF94
  Experiment info = {'participant': '', 'please enter your date of birth (dd/mm/yyyy)': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1280, 800]
  expName = proactive
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Routines
  Routine welcome
    TextComponent welcome_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.6
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      text:
        This experiment is split into two sections.

        We will let you know what you need to do at the beginning of each section.

        Press SPACE to start.
    KeyboardComponent welcome_adv
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        from random import randint

        list = randint(1, 6)
        expInfo["list"] = list

        skip_learn=0
        continue_learning=True

        im_size = [100/1920, 100/1080]

        xpos = 400/1920
        ypos=400/1080

        xdisp = .03
        ydisp = im_size[1]
  Routine learn_study
    CodeComponent code_2
      Code Type = Both
      Each Frame:
        if prac != 1:
            if list_no != expInfo["list"] or not continue_learning:
                continueRoutine = False

        if skip_learn==1:
            continueRoutine = False
      Each JS Frame:
        if ((prac !== 1)) {
            if (((list_no !== expInfo["list"]) || (! continue_learning))) {
                continueRoutine = false;
            }
        }
        if ((skip_learn === 1)) {
            continueRoutine = false;
        }
    TextComponent study_text
      color = black
      letterHeight = .1
      pos = (0, -.204)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 4
      text [set every repeat] = $word
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    ImageComponent study_image
      image [set every repeat] = $file
      pos = (0, .204)
      size = (600/1920, 600/1080)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 4
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  Routine learn_test
    CodeComponent code_3
      Code Type = Auto->JS
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      Each Frame:
        if prac != 1:
            if list_no != expInfo["list"] or not continue_learning:
                continueRoutine = False

        if skip_learn==1:
            continueRoutine = False
    CodeComponent learn_recall
      Code Type = Auto->JS
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      Begin Experiment:
        timer = core.Clock()
      Begin Routine:
        validkeys = [char for char in 'abcdefghijklmnopqrstuvwxyz']
        event.clearEvents('keyboard')
        recall_text.text = ''
        recall_started = False

        timer.reset()
      Each Frame:
        if not recall_started:
            recall_text.text = '?'

        keys = event.getKeys()
        if len(keys):
            key = keys[0]
            if key in validkeys:
                recall_started = True
                if recall_text.text == '?':
                    recall_text.text = ''
                recall_text.text = recall_text.text + key.upper()
            elif key == 'return':
                continueRoutine = False
            elif key == 'backspace':
                recall_text.text = recall_text.text[:-1]

        if timer.getTime() > 15:
            continueRoutine = False
      End Routine:
        thisExp.addData("recalled", recall_text.text)
        thisExp.addData("recalled_rt", timer.getTime())
    ImageComponent test_image
      image [set every repeat] = $file
      pos = (0, .204)
      size = (600/1920, 600/1080)
      startVal [time (s)] = 0.0
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    TextComponent recall_text
      color = black
      letterHeight = 0.1
      pos = (0, -.204)
      startVal [time (s)] = 0.0
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  Routine learn_test_instr
    CodeComponent code_10
      Code Type = Auto->JS
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      Each Frame:
        if skip_learn==1 or not continue_learning:
            continueRoutine = False
    TextComponent learn_test_instr_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = We'll now test your memory...
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  Routine learn_final_instr
    TextComponent learn_final_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.6
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      text:
        Now we will ask you about all of the 30 pairs you have been learning.

        Each image will be presented and your task is to recall the word associated with the image. Remember, you have 10 seconds to type your answer and press enter (or return) to submit.

        Press SPACE to start.
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_16
      Code Type = Auto->JS
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      Begin Routine:
        # reset this to run final test
        continue_learning = True
  Routine wm_instr
    TextComponent part2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.8
      text = SECTION 2
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    TextComponent wm_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 2
      wrapWidth = 1.6
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      text:
        The task in this section also uses pairs of images and words but is different from the task you did in section 1. In this section we are looking at short-term memory for pairs.

        In this task you will be presented with sequences of 4 image-word pairs to hold in mind over a 10 second interval. During this 10 second interval you will be asked to perform another task (more on this soon).

        Press SPACE to continue.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
      store = nothing
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  Routine wm_study
    CodeComponent set_test_order
      Code Type = Auto->JS
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      Each Frame:
        if prac != 1:
            if list_no != expInfo["list"]:
                continueRoutine = False
      End Routine:
        # SET THE ORDER OF TEST

        from random import shuffle

        testOrder = [0,1,2,3]

        testImages = [file1, file2, file3, file4]
        testWords = [word1, word2, word3, word4]

        shuffle(testOrder)
        recallCounter = 0

        all_recalled = []
        all_recall_rt = []
    ImageComponent wm_study_im1
      image [set every repeat] = $file1
      pos = (0, .204)
      size = (600/1920, 600/1080)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.8
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    TextComponent wm_study_tx1
      color = black
      letterHeight = 0.1
      pos = (0, -.204)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.8
      text [set every repeat] = $word1
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    ImageComponent wm_study_im2
      image [set every repeat] = $file2
      pos = (0, .204)
      size = (600/1920, 600/1080)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.8
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    TextComponent wm_study_tx2
      color = black
      letterHeight = 0.1
      pos = (0, -.204)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.8
      text [set every repeat] = $word2
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    ImageComponent wm_study_im3
      image [set every repeat] = $file3
      pos = (0, .204)
      size = (600/1920, 600/1080)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.8
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    TextComponent wm_study_tx3
      color = black
      letterHeight = 0.1
      pos = (0, -.204)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.8
      text [set every repeat] = $word3
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    ImageComponent wm_study_im4
      image [set every repeat] = $file4
      pos = (0, .204)
      size = (600/1920, 600/1080)
      startVal [time (s)] = 6
      stopVal [duration (s)] = 1.8
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    TextComponent wm_study_tx4
      color = black
      letterHeight = 0.1
      pos = (0, -.204)
      startVal [time (s)] = 6
      stopVal [duration (s)] = 1.8
      text [set every repeat] = $word4
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  Routine wm_test
    CodeComponent set_wm_test
      Code Type = Auto->JS
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      Begin Experiment:
        testImage = None
        timer_wm = core.Clock()
      Begin Routine:
        # SET TEST IMAGE + TEXT

        validkeys = [char for char in 'abcdefghijklmnopqrstuvwxyz']
        wm_recall_text.text = ''
        event.clearEvents('keyboard')

        recall_started = False
        timer_wm.reset()

        testImage = testImages[testOrder[recallCounter]]

        recallCounter += 1
      Each Frame:
        if prac != 1:
            if list_no != expInfo["list"]:
                continueRoutine = False

        if not recall_started:
            wm_recall_text.text = '?'

        keys = event.getKeys()
        if len(keys):
            key = keys[0]
            if key in validkeys:
                recall_started = True
                if wm_recall_text.text == '?':
                    wm_recall_text.text = ''
                wm_recall_text.text = wm_recall_text.text + key.upper()
            elif key == 'return':
                continueRoutine = False
            elif key == 'backspace':
                wm_recall_text.text = wm_recall_text.text[:-1]

        if timer_wm.getTime() > 15:
            continueRoutine = False
      End Routine:
        all_recalled.append(wm_recall_text.text)
        all_recall_rt.append(timer_wm.getTime())
    TextComponent wm_recall_text
      color = black
      letterHeight = 0.1
      pos = (0, -.204)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    ImageComponent wm_test_im
      image [set every repeat] = $testImage
      pos = (0, .204)
      size = (600/1920, 600/1080)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
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  Routine learn_feedback
    CodeComponent set_feedback
      Code Type = Auto->JS
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      Begin Routine:
        if recall_text.text == word:
            accuracy = 1
            feedback_col = "lightgreen"
            feedback_dur = 0
        else:
            accuracy = 0
            feedback_col = "red"
            feedback_dur = 4
      Each Frame:
        if prac != 1:
            if list_no != expInfo["list"] or not continue_learning:
                continueRoutine = False

        if skip_learn==1:
            continueRoutine = False
      End Routine:
        thisExp.addData("recall_acc", accuracy)

        if prac == 0:
            learn_n_correct += accuracy

            if list_no == expInfo["list"]:
                learn_n_done += 1
    TextComponent feedback_text
      color [set every repeat] = $feedback_col
      letterHeight = 0.1
      pos = (0, -.204)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text [set every repeat] = $recall_text.text
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    ImageComponent feed_image
      image [set every repeat] = $file
      pos = (0, .204)
      size = (600/1920, 600/1080)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $feedback_dur + 1
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    TextComponent post_fb_int
      letterHeight = 0.1
      startVal [time (s)] = $feedback_dur + 1
      stopVal [duration (s)] = .2
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    TextComponent restudy_text
      color = black
      letterHeight = 0.1
      pos = (0, -.204)
      startVal [time (s)] = 1
      stopVal [duration (s)] = $feedback_dur
      text [set every repeat] = $word
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  Routine set_counter
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        learn_n_correct = 0
        learn_n_done = 0

        learn_blocks_done += 1
      Each Frame:
        if skip_learn==1 or not continue_learning:
            continueRoutine = False
  Routine break_learn
    CodeComponent code_5
      Code Type = Auto->JS
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      Each Frame:
        print(learn_n_correct)
        print(learn_n_done)
        print(learn_n_correct/learn_n_done)

        if learn_n_correct/learn_n_done >= .8:
            learn_blocks_loop.finished = True
  Routine learn_instr2
    TextComponent text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.6
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      text:
        There are 30 pairs to learn and we will present them in groups of 10.

        The 10 pairs will be presented in sequences and after they have been presented you will be asked to recall the word associated with each image.

        Press SPACE to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine learn_instr3
    TextComponent text_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.6
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      text:
        During recall you will see an image you previously saw. You will have up to 15 seconds to recall the word associated with the image by typing it on the keyboard. Once the 15 seconds are up the task will move on automatically.

        When you have finished typing press the enter (or return) key to submit. If you can't remember the word you can press enter to pass. You can also delete mistakes using the backspace key.

        Press SPACE to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine learn_instr4
    TextComponent text_3
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.6
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      text:
        You will get feedback on whether the word you recall is right or wrong. The word will turn green if it is right. If it is wrong the word you typed will turn red then you will see the correct word with the image again.

        On the next screen you will see the image you saw before. Please type in the word that you saw with it and press enter (or return) to submit.

        Press SPACE to continue.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Routine:
        prac=1
  Routine learn_instr5
    TextComponent text_4
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.6
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      text:
        Great! You will now have a chance to practice this task. During practice you will see 5 pairs to remember and then recall.

        Press SPACE to start.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        prac=1
  Routine learn_end_prac
    TextComponent text_5
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.6
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      text:
        End of practice.

        We will now go though all of the pairs in groups of 10. We'll keep going until you get 80% correct or until you have seen all of the pairs three times.

        Press SPACE when you are ready to start the main task.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        prac=0
        continue_learning=True
        learn_blocks_done = 0
  Routine wm_instr2
    TextComponent text_6
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.6
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      text:
        After the 10 second interval you will be asked to recall the word associated with each image by typing it on the keyboard then pressing enter (or return) to submit. There won't be any feedback in this section.

        Next we will tell you more about the task your are asked to do during the 10 second interval.

        Press SPACE to start.
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end_wm_prac
    TextComponent text_7
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.6
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      text:
        End of practice.

        Press SPACE to start the main task.
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        prac=0
  Routine RI
    CodeComponent code_12
      Code Type = Auto->JS
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      Each Frame:
        if prac != 1:
            if list_no != expInfo["list"]:
                continueRoutine = False
    TextComponent ri_blank
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine end_exp
    TextComponent end_exp_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        That's the end of the experiment!

        Thank you for taking part.

        Please wait a moment for the data to be saved...
  Routine learn_instr1
    TextComponent part1
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.8
      text = SECTION 1
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    TextComponent learn_intsr_text
      color = black
      letterHeight = 0.1
      pos = (0, -.7)
      startVal [time (s)] = 2
      wrapWidth = 1.6
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      text:
        In this section of the experiment we will present you with pairs of images and words to learn. An example pair is shown above. Press SPACE to continue.
    KeyboardComponent learn_instr_adv
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
      store = nothing
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    TextComponent ex_word
      color = black
      letterHeight = 0.1
      pos = (0, -.204)
      startVal [time (s)] = 2
      text = TOUGH
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    ImageComponent ex_im
      image = stimuli/images/PICTURE_747.png
      pos = (0, .204)
      size = (600/1920, 600/1080)
      startVal [time (s)] = 2
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  Routine ST
    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        miss_count = 0
      Each Frame:
        if prac != 1:
            if list_no != expInfo["list"]:
                continueRoutine = False
    TextComponent st_text
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Press '1' or '0' to start the next sequence...
      wrapWidth = 1.6
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    KeyboardComponent st_key
      allowedKeys = '1', '0'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end_learn
    TextComponent text_8
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.6
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      text:
        That is the end of the first section.

        Press SPACE to continue.
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine consent
    TextComponent consent_text
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      wrapWidth = 1.8
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      text:
        Thank you for volunteering to take part in this study conducted by researchers at the Department of Psychology at the University of Toronto. In this study we are looking at memory for random pairs of images and words. The images are drawings of everyday objects and the words are nouns with 4-6 letters. The study is split into two parts: The first part assesses learning of image-word pairs and the second part looks at short-term memory. In both parts your memory will be tested by presenting an image and asking you to recall the associated word by typing on the keyboard.

        The data we collect for this study concerns the accuracy and speed of memory recall. These data will be stored in an anonymised format (using the ID assigned to you by prolific) and may be shared with other researchers via public data repositories (such as the open science framework; www.osf.io). You may exit the study at any time without penalty by pressing the escape key.

        If you consent to take part in this study, please press ‘Y’

        If you do not consent to take part, please press the escape key and close this window
    KeyboardComponent consent_key
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine begin_block
    CodeComponent code_15
      Code Type = Auto->JS
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      Each Frame:
        if skip_learn==1 or not continue_learning:
            continueRoutine = False
    TextComponent text_10
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = Press SPACE to see the next set of 10 pairs
      wrapWidth = 1.6
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    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine write
    CodeComponent code_14
      Code Type = Auto->JS
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      Begin Routine:
        for i in range(4):
            thisExp.addData("wm_recalled"+str(i+1), all_recalled[i])
            thisExp.addData("wm_recall_rt"+str(i+1), all_recall_rt[i])
            thisExp.addData("wm_probed"+str(i+1), testOrder[i])
            thisExp.addData("wm_recall_acc"+str(i+1), testWords[testOrder[i]] == all_recalled[i])
      Each Frame:
        if prac != 1:
            if list_no != expInfo["list"]:
                continueRoutine = False
    TextComponent text_11
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .3
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  Routine wm_recall_isi
    CodeComponent code_17
      Code Type = Auto->JS
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      Each Frame:
        if prac != 1:
            if list_no != expInfo["list"]:
                continueRoutine = False
    TextComponent wm_isi_blank
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .2
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  Routine next_instr
    CodeComponent set_next_instr
      Code Type = Both
      Begin JS Routine:
        perccor = Number.parseInt(((learn_n_correct / learn_n_done) * 100));
        if ((((learn_n_correct / learn_n_done) >= 0.8) || (learn_blocks_done === 3))) {
            next_instr = "Well done! You got " + perccor + "% of the pairs correct. We will now move on to the next part of the experiment.\n\nPress SPACE to continue.";
        } else {
            next_instr = "Well done! You got " + perccor + "% of the pairs correct. We will loop through all of the pairs again in groups of 10.\n\nPress SPACE to continue.";
        }
      Begin Routine:
        perccor = int((learn_n_correct/learn_n_done)*100)

        if learn_n_correct/learn_n_done >= .8 or learn_blocks_done == 3:
            next_instr = "Well done! You got {}% of the pairs correct. We will now move on to the next part of the experiment.\n\nPress SPACE to continue.".format(perccor)
        else:
            next_instr = "Well done! You got {}% of the pairs correct. We will loop through all of the pairs again in groups of 10.\n\nPress SPACE to continue.".format(perccor)
    TextComponent next_instr_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $next_instr
      wrapWidth = 1.6
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    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine search
    CodeComponent set_search
      Code Type = Both
      Begin Experiment:
        tars = ['l', 'r']
        nontars = ['b', 't']

        im_dir = "stimuli/search/"
      Begin JS Experiment:
        tars = ["l", "r"];
        nontars = ["b", "t"];
        im_dir = "stimuli/search/";
      Begin JS Routine:
        var ims, opts, s1, s1pos, s2, s2pos, s3, s3pos, s4, s4pos, s5, s5pos, s6, s6pos, s7, s7pos, s8, s8pos, tari, tarright;
        s1pos = [((- xpos) - xdisp), (ypos + ((Math.random() - 0.5) * ydisp))];
        s2pos = [((- xpos) + xdisp), (ypos + ((Math.random() - 0.5) * ydisp))];
        s3pos = [(xpos - xdisp), (ypos + ((Math.random() - 0.5) * ydisp))];
        s4pos = [(xpos + xdisp), (ypos + ((Math.random() - 0.5) * ydisp))];
        s5pos = [(xpos - xdisp), ((- ypos) + ((Math.random() - 0.5) * ydisp))];
        s6pos = [(xpos + xdisp), ((- ypos) + ((Math.random() - 0.5) * ydisp))];
        s7pos = [((- xpos) - xdisp), ((- ypos) + ((Math.random() - 0.5) * ydisp))];
        s8pos = [((- xpos) + xdisp), ((- ypos) + ((Math.random() - 0.5) * ydisp))];
        tari = (Math.floor((Math.random() * ((3 - 0) + 1))) + 0);
        tarright = Math.random() > 0.5 === true ? 1 : 0;
        ims = [];
        for (var i, _pj_c = 0, _pj_a = [0, 1, 2, 3], _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            if (i === tari) {
                console.log(tarright)
                opts = [tars[tarright], nontars[Math.random() > 0.5 === true ? 1 : 0]];
            } else {
                opts = nontars;
            }
            if (Math.random() > 0.5) {
                ims = ims.concat(opts);
            } else {
                ims = ims.concat([opts[1], opts[0]]);
            }
        }
        s1 = ((im_dir + ims[0]) + ".png");
        s2 = ((im_dir + ims[1]) + ".png");
        s3 = ((im_dir + ims[2]) + ".png");
        s4 = ((im_dir + ims[3]) + ".png");
        s5 = ((im_dir + ims[4]) + ".png");
        s6 = ((im_dir + ims[5]) + ".png");
        s7 = ((im_dir + ims[6]) + ".png");
        s8 = ((im_dir + ims[7]) + ".png");

        psychoJS.experiment.addData("s_im1", s1);
        psychoJS.experiment.addData("s_im2", s2);
        psychoJS.experiment.addData("s_im3", s3);
        psychoJS.experiment.addData("s_im4", s4);
        psychoJS.experiment.addData("s_im5", s5);
        psychoJS.experiment.addData("s_im6", s6);
        psychoJS.experiment.addData("s_im7", s7);
        psychoJS.experiment.addData("s_im8", s8);
        psychoJS.experiment.addData("s_im1pos", s1pos);
        psychoJS.experiment.addData("s_im2pos", s2pos);
        psychoJS.experiment.addData("s_im3pos", s3pos);
        psychoJS.experiment.addData("s_im4pos", s4pos);
        psychoJS.experiment.addData("s_im5pos", s5pos);
        psychoJS.experiment.addData("s_im6pos", s6pos);
        psychoJS.experiment.addData("s_im7pos", s7pos);
        psychoJS.experiment.addData("s_im8pos", s8pos);
        psychoJS.experiment.addData("s_tarright", tarright);
      Begin Routine:
        from random import random, randint

        s1pos = [-xpos-xdisp, ypos + ((random() - .5)*ydisp)]
        s2pos = [-xpos+xdisp, ypos + ((random() - .5)*ydisp)]

        s3pos = [xpos-xdisp, ypos + ((random() - .5)*ydisp)]
        s4pos = [xpos+xdisp, ypos + ((random() - .5)*ydisp)]

        s5pos = [xpos-xdisp, -ypos + ((random() - .5)*ydisp)]
        s6pos = [xpos+xdisp, -ypos + ((random() - .5)*ydisp)]

        s7pos = [-xpos-xdisp, -ypos + ((random() - .5)*ydisp)]
        s8pos = [-xpos+xdisp, -ypos + ((random() - .5)*ydisp)]

        tari = randint(0, 3)
        tarright = random() > .5

        ims = []
        for i in [0,1,2,3]:
            if i == tari:
                opts = [tars[tarright], nontars[random() > .5]]
            else:
                opts = nontars[:]
            if random() > .5:
                ims.extend(opts)
            else:
                ims.extend([opts[1], opts[0]])

        s1 = im_dir + ims[0] + ".png"
        s2 = im_dir + ims[1] + ".png"

        s3 = im_dir + ims[2] + ".png"
        s4 = im_dir + ims[3] + ".png"

        s5 = im_dir + ims[4] + ".png"
        s6 = im_dir + ims[5] + ".png"

        s7 = im_dir + ims[6] + ".png"
        s8 = im_dir + ims[7] + ".png"

        thisExp.addData("s_im1", s1)
        thisExp.addData("s_im2", s2)
        thisExp.addData("s_im3", s3)
        thisExp.addData("s_im4", s4)
        thisExp.addData("s_im5", s5)
        thisExp.addData("s_im6", s6)
        thisExp.addData("s_im7", s7)
        thisExp.addData("s_im8", s8)

        thisExp.addData("s_im1pos", s1pos)
        thisExp.addData("s_im2pos", s2pos)
        thisExp.addData("s_im3pos", s3pos)
        thisExp.addData("s_im4pos", s4pos)
        thisExp.addData("s_im5pos", s5pos)
        thisExp.addData("s_im6pos", s6pos)
        thisExp.addData("s_im7pos", s7pos)
        thisExp.addData("s_im8pos", s8pos)

        thisExp.addData("s_tarright", tarright)
      Each Frame:
        if prac != 1:
            if list_no != expInfo["list"]:
                continueRoutine = False
      Each JS Frame:
        if ((prac !== 1)) {
            if ((list_no !== expInfo["list"])) {
                continueRoutine = false;
            }
        }
    ImageComponent sim1
      image [set every repeat] = $s1
      pos [set every repeat] = $s1pos
      size [set every repeat] = $im_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent sim2
      image [set every repeat] = $s2
      pos [set every repeat] = $s2pos
      size [set every repeat] = $im_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent sim3
      image [set every repeat] = $s3
      pos [set every repeat] = $s3pos
      size [set every repeat] = $im_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent sim4
      image [set every repeat] = $s4
      pos [set every repeat] = $s4pos
      size [set every repeat] = $im_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent sim5
      image [set every repeat] = $s5
      pos [set every repeat] = $s5pos
      size [set every repeat] = $im_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent sim6
      image [set every repeat] = $s6
      pos [set every repeat] = $s6pos
      size [set every repeat] = $im_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    ImageComponent sim7
      image [set every repeat] = $s7
      pos [set every repeat] = $s7pos
      size [set every repeat] = $im_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent sim8
      image [set every repeat] = $s8
      pos [set every repeat] = $s8pos
      size [set every repeat] = $im_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    KeyboardComponent search_resp
      allowedKeys = '1', '0'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent search_fix
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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  Routine search_instr
    TextComponent top_text
      color = black
      letterHeight = 0.08
      pos = (0, .6)
      startVal [time (s)] = 0.0
      text = During the 10 second interval between seeing the pairs you need to remember and recalling them there is a search task. In this task you will see square symbols with open sides. All but one of these symbols will have an open side at the top or bottom.
      wrapWidth = 1.6
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    TextComponent mid_text
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text = The task is to find the one symbol that is open at the left or right. When you have found it press '1' if the target square is open on the left or '0' for right.
      wrapWidth = 1.6
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    TextComponent bottom_text
      color = black
      letterHeight = 0.08
      pos = (0, -.5)
      startVal [time (s)] = 0.0
      wrapWidth = 1.6
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      text:
        The next screen shows an example of a search screen where the correct answer is 'right' (the '0' key).

        Press SPACE to continue
    ImageComponent t_im
      image = stimuli/search/t.png
      pos = (-.2, .25)
      size [set every repeat] = $im_size
      startVal [time (s)] = 0.0
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    ImageComponent b_im
      image = stimuli/search/b.png
      pos = (.2, .25)
      size [set every repeat] = $im_size
      startVal [time (s)] = 0.0
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    ImageComponent l_im
      image = stimuli/search/l.png
      pos = (-.2, -.25)
      size [set every repeat] = $im_size
      startVal [time (s)] = 0.0
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    ImageComponent r_im
      image = stimuli/search/r.png
      pos = (.2, -.25)
      size [set every repeat] = $im_size
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine search_instr2
    CodeComponent set_search_ex
      Code Type = Both
      Begin JS Routine:
        var s1posex, s2posex, s3posex, s4posex, s5posex, s6posex, s7posex, s8posex;
        s1posex = [((- xpos) - xdisp), (ypos + ((Math.random() - 0.5) * ydisp))];
        s2posex = [((- xpos) + xdisp), (ypos + ((Math.random() - 0.5) * ydisp))];
        s3posex = [(xpos - xdisp), (ypos + ((Math.random() - 0.5) * ydisp))];
        s4posex = [(xpos + xdisp), (ypos + ((Math.random() - 0.5) * ydisp))];
        s5posex = [(xpos - xdisp), ((- ypos) + ((Math.random() - 0.5) * ydisp))];
        s6posex = [(xpos + xdisp), ((- ypos) + ((Math.random() - 0.5) * ydisp))];
        s7posex = [((- xpos) - xdisp), ((- ypos) + ((Math.random() - 0.5) * ydisp))];
        s8posex = [((- xpos) + xdisp), ((- ypos) + ((Math.random() - 0.5) * ydisp))];
      Begin Routine:
        from random import random

        s1posex = [-xpos-xdisp, ypos + ((random() - .5)*ydisp)]
        s2posex = [-xpos+xdisp, ypos + ((random() - .5)*ydisp)]

        s3posex = [xpos-xdisp, ypos + ((random() - .5)*ydisp)]
        s4posex = [xpos+xdisp, ypos + ((random() - .5)*ydisp)]

        s5posex = [xpos-xdisp, -ypos + ((random() - .5)*ydisp)]
        s6posex = [xpos+xdisp, -ypos + ((random() - .5)*ydisp)]

        s7posex = [-xpos-xdisp, -ypos + ((random() - .5)*ydisp)]
        s8posex = [-xpos+xdisp, -ypos + ((random() - .5)*ydisp)]
    ImageComponent sim1_ex
      image = stimuli/search/t.png
      pos [set every repeat] = $s1posex
      size [set every repeat] = $im_size
      startVal [time (s)] = 0.0
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    ImageComponent sim2_ex
      image = stimuli/search/b.png
      pos [set every repeat] = $s2posex
      size [set every repeat] = $im_size
      startVal [time (s)] = 0.0
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    ImageComponent sim3_ex
      image = stimuli/search/b.png
      pos [set every repeat] = $s3posex
      size [set every repeat] = $im_size
      startVal [time (s)] = 0.0
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    ImageComponent sim4_ex
      image = stimuli/search/t.png
      pos [set every repeat] = $s4posex
      size [set every repeat] = $im_size
      startVal [time (s)] = 0.0
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    ImageComponent sim5_ex
      image = stimuli/search/t.png
      pos [set every repeat] = $s5posex
      size [set every repeat] = $im_size
      startVal [time (s)] = 0.0
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    ImageComponent sim6_ex
      image = stimuli/search/b.png
      pos [set every repeat] = $s6posex
      size [set every repeat] = $im_size
      startVal [time (s)] = 0.0
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    ImageComponent sim7_ex
      image = stimuli/search/t.png
      pos [set every repeat] = $s7posex
      size [set every repeat] = $im_size
      startVal [time (s)] = 0.0
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    ImageComponent sim8_ex
      image = stimuli/search/r.png
      pos [set every repeat] = $s8posex
      size [set every repeat] = $im_size
      startVal [time (s)] = 0.0
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    TextComponent text_12
      color = black
      letterHeight = 0.08
      pos = (0, -.75)
      startVal [time (s)] = 3
      wrapWidth = 1.6
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      text:
        In this case the target is in the bottom left of the screen and is open on the right (so the correct response is '0'). In the main task the symbols will only be presented for 2 seconds. Press SPACE to continue
    KeyboardComponent key_resp_14
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
      store = nothing
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    TextComponent text_15
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = +
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  Routine search_instr3
    TextComponent text_13
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.6
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      text:
        During the 10 second interval you will see 4 of these search problems (each requiring a left or right response).

        Now we will practice this task by itself. Each screen will only appear for 2 seconds so try to search for the target (square open at the left or right) and respond as quickly and accurately as possible.

        Remember, press '1' if the target square is open on the left or '0' for right.

        Rest your fingers over these keys and press either to begin
    KeyboardComponent key_resp_15
      allowedKeys = '1', '0'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        prac=1
  Routine wm_instr3
    TextComponent text_14
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.6
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      text:
        Well done!

        Now we will practice both tasks together. Remember, you will see 4 image-word pairs to remember. Then during the 10 second interval you will have 4 search problems to respond to (is the target square open on the left or right?). After that you will be asked to type the word associated with each image you studied.

        There will be 3 example sequences to practice the tasks together.

        Press SPACE to continue.
    KeyboardComponent key_resp_16
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_18
      Code Type = Auto->JS
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      Begin Routine:
        prac=1
  Routine search_isi
    CodeComponent code_20
      Code Type = Auto->JS
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      Each Frame:
        if prac != 1:
            if list_no != expInfo["list"]:
                continueRoutine = False
    TextComponent text_9
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine search_reminder
    CodeComponent code_19
      Code Type = Auto->JS
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      Each Frame:
        if prac != 1:
            if list_no != expInfo["list"]:
                continueRoutine = False

        if miss_count < 2:
            continueRoutine = False
    TextComponent text_16
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      wrapWidth = 1.6
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      text:
        Remember to respond to the search task!

        Press '1' if the target square is open on the left or '0' for right
  Routine search_miss
    CodeComponent miss_count
      Code Type = Auto->JS
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      Begin Routine:
        if search_resp.keys not in ["0", "1"]:
            miss_count += 1
Flow
  Routine consent
  Routine welcome
  Routine learn_instr1
  Routine learn_instr2
  Routine learn_instr3
  Routine learn_instr4
  LoopInitiator example_recall loopType="TrialHandler"
    conditions = [OrderedDict([('file', 'stimuli/images/PICTURE_747.png'), ('word', 'TOUGH')])]
    conditionsFile = stimuli/example.csv
    loopType = random
    nReps = 1
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    Routine learn_test
    Routine learn_feedback
  LoopTerminator example_recall
  Routine learn_instr5
  LoopInitiator prac_learn_study_loop loopType="TrialHandler"
    conditionsFile = stimuli/prac-learn-lists.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('file', 'stimuli/images/PICTURE_695.png'), ('image', 'orange'), ('word', 'TREE')]),
      OrderedDict([('file', 'stimuli/images/PICTURE_625.png'), ('image', 'sledge'), ('word', 'LIAR')]),
      OrderedDict([('file', 'stimuli/images/PICTURE_422.png'), ('image', 'axe'), ('word', 'BOOTH')]),
      OrderedDict([('file', 'stimuli/images/PICTURE_111.png'), ('image', 'dragon'), ('word', 'DEVIL')]),
      OrderedDict([('file', 'stimuli/images/PICTURE_442.png'), ('image', 'pineapple'), ('word', 'TALENT')])]
    Routine learn_study
  LoopTerminator prac_learn_study_loop
  Routine learn_test_instr
  LoopInitiator prac_learn_test_loop loopType="TrialHandler"
    conditionsFile = stimuli/prac-learn-lists.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('file', 'stimuli/images/PICTURE_695.png'), ('image', 'orange'), ('word', 'TREE')]),
      OrderedDict([('file', 'stimuli/images/PICTURE_625.png'), ('image', 'sledge'), ('word', 'LIAR')]),
      OrderedDict([('file', 'stimuli/images/PICTURE_422.png'), ('image', 'axe'), ('word', 'BOOTH')]),
      OrderedDict([('file', 'stimuli/images/PICTURE_111.png'), ('image', 'dragon'), ('word', 'DEVIL')]),
      OrderedDict([('file', 'stimuli/images/PICTURE_442.png'), ('image', 'pineapple'), ('word', 'TALENT')])]
    Routine learn_test
    Routine learn_feedback
  LoopTerminator prac_learn_test_loop
  Routine learn_end_prac
  LoopInitiator learn_blocks_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    Routine set_counter
    LoopInitiator learn_blocks loopType="TrialHandler"
      conditionsFile = stimuli/learn-loop.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('block_csv', 'stimuli/learn-block1.csv')]),
        OrderedDict([('block_csv', 'stimuli/learn-block2.csv')]),
        OrderedDict([('block_csv', 'stimuli/learn-block3.csv')]),
        OrderedDict([('block_csv', 'stimuli/learn-block4.csv')])]
      Routine begin_block
      LoopInitiator learn_study_loop loopType="TrialHandler"
        conditionsFile = $block_csv
        loopType = random
        nReps = 1
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        Routine learn_study
      LoopTerminator learn_study_loop
      Routine learn_test_instr
      LoopInitiator learn_test_loop loopType="TrialHandler"
        conditionsFile = $block_csv
        loopType = random
        nReps = 1
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        Routine learn_test
        Routine learn_feedback
      LoopTerminator learn_test_loop
    LoopTerminator learn_blocks
    Routine next_instr
    Routine break_learn
  LoopTerminator learn_blocks_loop
  Routine learn_final_instr
  LoopInitiator final_learn_test loopType="TrialHandler"
    conditionsFile = stimuli/learn-lists.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('file', 'stimuli/images/PICTURE_558.png'), ('image', 'lighter'), ('word', 'HONEY'), ('list_no', 1), ('block_no', 3)]),
      OrderedDict([('file', 'stimuli/images/PICTURE_308.png'), ('image', 'dice'), ('word', 'GIRL'), ('list_no', 1), ('block_no', 2)]),
      OrderedDict([('file', 'stimuli/images/PICTURE_452.png'), ('image', 'watch'), ('word', 'NATION'), ('list_no', 1), ('block_no', 0)]),
      OrderedDict([('file', 'stimuli/images/PICTURE_667.png'), ('image', 'daisy'), ('word', 'MILLER'), ('list_no', 1), ('block_no', 0)]),
      OrderedDict([('file', 'stimuli/images/PICTURE_356.png'), ('image', 'pawn'), ('word', 'SYSTEM'), ('list_no', 1), ('block_no', 3)]),
      OrderedDict([('file', 'stimuli/images/PICTURE_675.png'), ('image', 'windmill'), ('word', 'GLASS'), ('list_no', 1), ('block_no', 3)]),
      OrderedDict([('file', 'stimuli/images/PICTURE_203.png'), ('image', 'cap'), ('word', 'SPEECH'), ('list_no', 1), ('block_no', 0)]),
      OrderedDict([('file', 'stimuli/images/PICTURE_18.png'), ('image', 'planet'), ('word', 'LEADER'), ('list_no', 1), ('block_no', 0)]),
      OrderedDict([('file', 'stimuli/images/PICTURE_248.png'), ('image', 'cart'), ('word', 'FRIEND'), ('list_no', 1), ('block_no', 2)]),
      OrderedDict([('file', 'stimuli/images/PICTURE_32.png'), ('image', 'crown'), ('word', 'JUNGLE'), ('list_no', 1), ('block_no', 3)]),
      OrderedDict([('file', 'stimuli/images/PICTURE_685.png'), ('image', 'goose'), ('word', 'IDEAS'), ('list_no', 1), ('block_no', 1)])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
    Routine learn_test
    Routine learn_feedback
  LoopTerminator final_learn_test
  Routine end_learn
  Routine wm_instr
  Routine wm_instr2
  Routine search_instr
  Routine search_instr2
  Routine search_instr3
  LoopInitiator search_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 20
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    Routine search
    Routine search_isi
  LoopTerminator search_loop
  Routine wm_instr3
  LoopInitiator prac_wm_trial_loop loopType="TrialHandler"
    conditionsFile = stimuli/prac-wm-lists.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('word1', 'LESSON'), ('image1', 'tag'), ('file1', 'stimuli/images/PICTURE_132.png'), ('item_type1', 'prac'), ('word3', 'ENERGY'), ('image3', 'mask'), ('file3', 'stimuli/images/PICTURE_84.png'), ('item_type3', 'prac'), ('word2', 'MISTER'), ('image2', 'kite'), ('file2', 'stimuli/images/PICTURE_720.png'), ('item_type2', 'prac'), ('word4', 'WALLS'), ('image4', 'jumper'), ('file4', 'stimuli/images/PICTURE_607.png'), ('item_type4', 'prac')]),
      OrderedDict([('word1', 'PERSON'), ('image1', 'scorpion'), ('file1', 'stimuli/images/PICTURE_370.png'), ('item_type1', 'prac'), ('word3', 'CARD'), ('image3', 'shield'), ('file3', 'stimuli/images/PICTURE_501.png'), ('item_type3', 'prac'), ('word2', 'BEAST'), ('image2', 'book'), ('file2', 'stimuli/images/PICTURE_505.png'), ('item_type2', 'prac'), ('word4', 'HEARTS'), ('image4', 'coffin'), ('file4', 'stimuli/images/PICTURE_497.png'), ('item_type4', 'prac')]),
      OrderedDict([('word1', 'THIEF'), ('image1', 'burger'), ('file1', 'stimuli/images/PICTURE_11.png'), ('item_type1', 'prac'), ('word3', 'MOTHER'), ('image3', 'umbrella'), ('file3', 'stimuli/images/PICTURE_653.png'), ('item_type3', 'prac'), ('word2', 'MOOD'), ('image2', 'accordion'), ('file2', 'stimuli/images/PICTURE_717.png'), ('item_type2', 'prac'), ('word4', 'TURKEY'), ('image4', 'mountain'), ('file4', 'stimuli/images/PICTURE_407.png'), ('item_type4', 'prac')])]
    Routine ST
    Routine wm_study
    LoopInitiator prac_wm_search_loop loopType="TrialHandler"
      loopType = sequential
      nReps = 4
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      Routine search_isi
      Routine search
      Routine search_miss
    LoopTerminator prac_wm_search_loop
    LoopInitiator prac_wm_test_loop loopType="TrialHandler"
      loopType = random
      nReps = 4
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      Routine wm_test
      Routine wm_recall_isi
    LoopTerminator prac_wm_test_loop
    Routine write
    Routine search_reminder
  LoopTerminator prac_wm_trial_loop
  Routine end_wm_prac
  LoopInitiator wm_trial_loop loopType="TrialHandler"
    conditionsFile = stimuli/wm-lists.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('word1', 'SAKE'), ('image1', 'stool'), ('file1', 'stimuli/images/PICTURE_469.png'), ('item_type1', 'new-new'), ('word2', 'SEASON'), ('image2', 'wheel'), ('file2', 'stimuli/images/stimuli/images/PICTURE_504.png.png'), ('item_type2', 'old-new'), ('word3', 'WITCH'), ('image3', 'stamp'), ('file3', 'stimuli/images/stimuli/images/PICTURE_57.png.png'), ('item_type3', 'match'), ('word4', 'PHOTO'), ('image4', 'cathedral'), ('file4', 'stimuli/images/stimuli/images/PICTURE_403.png.png'), ('item_type4', 'mis-match'), ('list_no', 1)]),
      OrderedDict([('word1', 'FLIGHT'), ('image1', 'recorder'), ('file1', 'stimuli/images/stimuli/images/PICTURE_156.png.png'), ('item_type1', 'old-new'), ('word2', 'ESTATE'), ('image2', 'tyre'), ('file2', 'stimuli/images/stimuli/images/PICTURE_2.png.png'), ('item_type2', 'mis-match'), ('word3', 'DUDE'), ('image3', 'tractor'), ('file3', 'stimuli/images/PICTURE_74.png'), ('item_type3', 'new-new'), ('word4', 'CLOCK'), ('image4', 'diamond'), ('file4', 'stimuli/images/stimuli/images/PICTURE_85.png.png'), ('item_type4', 'match'), ('list_no', 1)]),
      OrderedDict([('word1', 'RECORD'), ('image1', 'kettle'), ('file1', 'stimuli/images/stimuli/images/PICTURE_750.png.png'), ('item_type1', 'mis-match'), ('word2', 'NIGHT'), ('image2', 'basket'), ('file2', 'stimuli/images/stimuli/images/PICTURE_487.png.png'), ('item_type2', 'old-new'), ('word3', 'COPS'), ('image3', 'mirror'), ('file3', 'stimuli/images/PICTURE_340.png'), ('item_type3', 'new-new'), ('word4', 'FRIEND'), ('image4', 'cart'), ('file4', 'stimuli/images/stimuli/images/PICTURE_248.png.png'), ('item_type4', 'match'), ('list_no', 1)]),
      OrderedDict([('word1', 'LETTER'), ('image1', 'monkey'), ('file1', 'stimuli/images/stimuli/images/PICTURE_708.png.png'), ('item_type1', 'old-new'), ('word2', 'BODY'), ('image2', 'button'), ('file2', 'stimuli/images/PICTURE_64.png'), ('item_type2', 'new-new'), ('word3', 'THING'), ('image3', 'hanger'), ('file3', 'stimuli/images/stimuli/images/PICTURE_147.png.png'), ('item_type3', 'mis-match'), ('word4', 'BOYS'), ('image4', 'calendar'), ('file4', 'stimuli/images/stimuli/images/PICTURE_108.png.png'), ('item_type4', 'match'), ('list_no', 1)])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
    Routine ST
    Routine wm_study
    LoopInitiator wm_search_loop loopType="TrialHandler"
      loopType = sequential
      nReps = 4
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      Routine search_isi
      Routine search
      Routine search_miss
    LoopTerminator wm_search_loop
    LoopInitiator wm_test_loop loopType="TrialHandler"
      loopType = sequential
      nReps = 4
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      Routine wm_test
      Routine wm_recall_isi
    LoopTerminator wm_test_loop
    Routine write
    Routine search_reminder
  LoopTerminator wm_trial_loop
  Routine end_exp
